WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow
  Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai
  TaskLogicPath=..\local\example_AindBehaviorDynamicRoutingBonsaiTaskLogic.json
  RigPath=..\local\AindBehaviorDynamicRoutingBonsaiRig.json
  SessionPath=..\local\AindBehaviorSessionModel.json

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindBehaviorDynamicRoutingBonsaiDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.AindBehaviorSessionModel>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindBehaviorDynamicRoutingBonsaiDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.AindBehaviorDynamicRoutingBonsaiRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindBehaviorDynamicRoutingBonsaiDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.AindBehaviorDynamicRoutingBonsaiTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=6)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    SubscribeSubject SubjectSchema
    -> PropertyMapping(RootFolder(Selector=RootPath), Subject(Selector=Subject))
    -> IncludeWorkflow
      Path=AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai
      RootFolder=C:/Users/neurogears/source/repos/AllenNeuralDynamics/dynamic-routing-bonsai/temp_data
      Subject=Plimbo
      DateTimeOffset=0001-01-01T00:00:00.0000000+00:00
      SubjectName=LoggingRootPath

GroupWorkflow Initialization
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed)
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil) => #4
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=InterTrialInterval.DistributionParameters.Min)
    -> PropertyMapping(Lower) => #7
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=InterTrialInterval.DistributionParameters.Max)
    -> PropertyMapping(Upper) => #10
    #4, #7, #10 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=3)
    -> BehaviorSubject InterTrialIntervalDistribution

GroupWorkflow Hardware
    GroupWorkflow ScreenConfiguration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen)
        -> PropertyMapping(DisplayDevice(Selector=DisplayIndex), TargetRenderFrequency(Selector=TargetRenderFrequency), TargetUpdateFrequency(Selector=TargetUpdateFrequency))
        -> Bonsai.Shaders.CreateWindow
          Width=1000
          Height=1000
          Title=DynamicRouting
          VSync=Off
          SwapSync=false
          ClearColor=DarkGray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Resizable
          WindowState=Normal
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=120
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:RenderResources.bonsai)
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.Calibration)
        -> Defer LoadDisplayCalibration
            WorkflowInput Source1
            -> AsyncSubject calibration

            SubscribeSubject calibration
            -> MemberSelector(Selector=Left)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #4
            SubscribeSubject calibration
            -> MemberSelector(Selector=Center)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #7
            SubscribeSubject calibration
            -> MemberSelector(Selector=Right)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #10
            #4, #7, #10 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Left,
                Item2 as Center,
                Item3 as Right)
            -> WorkflowOutput
        -> Take(Count=1)
        -> AsyncSubject DisplayCalibration

        GroupWorkflow RenderLoop
            GroupWorkflow RenderLoop
                Bonsai.Shaders.RenderFrame
                -> PublishSubject RenderFrame
                -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1)
                -> PublishSubject Draw2DStim
                -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
                -> PublishSubject PostDrawing
                -> WorkflowOutput

            IncludeWorkflow(Path=AllenNeuralDynamics.Core:DisplaySynchQuad.bonsai, Minimum=2, Maximum=6)

            Disable FloatProperty(Value=1)
            -> Disable Take(Count=1)
            -> Disable BehaviorSubject WorldContrast

            Disable SubscribeSubject RigSchema
            -> Disable MemberSelector(Selector=Screen)
            -> Disable MemberSelector(Selector=Contrast) => #7
            Disable SubscribeSubject WorldContrast => #8
            #7, #8 -> Disable CombineLatest
            -> Disable Multiply
            -> Disable MulticastSubject DisplayContrast

            Disable SubscribeSubject RigSchema
            -> Disable MemberSelector(Selector=Screen)
            -> Disable MemberSelector(Selector=Brightness)
            -> Disable MulticastSubject DisplayBrightness
    -> DelaySubscription(DueTime=PT2S)

    SubscribeSubject RenderFrame
    -> MemberSelector(Selector=TimeStep.ElapsedTime)
    -> Accumulate
    -> BehaviorSubject TimeBase

    GroupWorkflow VisualStimuli
        BehaviorSubject<AindBehaviorDynamicRoutingBonsaiDataSchema.Stimulus> DrawStimulus => #0
        -> AindBehaviorDynamicRoutingBonsaiDataSchema.MatchStimulus(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.GratingStimulus>)
        -> CreateObservable DrawGrating => #2
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Grating

            SubscribeSubject Draw2DStim => #3
            SubscribeSubject Grating
            -> MemberSelector(Selector=ExtentX)
            -> PropertyMapping(ExtentX) => #6
            SubscribeSubject Grating
            -> MemberSelector(Selector=ExtentX)
            -> PropertyMapping(ExtentY) => #9
            SubscribeSubject Grating
            -> MemberSelector(Selector=SpatialFrequency)
            -> PropertyMapping(SpatialFrequency) => #12
            SubscribeSubject Grating
            -> MemberSelector(Selector=TemporalFrequency)
            -> PropertyMapping(TemporalFrequency) => #15
            SubscribeSubject Grating
            -> MemberSelector(Selector=Aperture)
            -> PropertyMapping(Aperture) => #18
            SubscribeSubject Grating
            -> MemberSelector(Selector=Angle)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Angle) => #22
            #3, #6, #9, #12, #15, #18, #22 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=2
              ExtentY=2
              SpatialFrequency=10
              TemporalFrequency=2
              Phase=0
              Angle=0
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=1
              Opacity=1
            -> WorkflowOutput
            SubscribeSubject Grating => #25
            #3, #25 -> WithLatestFrom
            -> Take(Count=1)
            -> MemberSelector(Selector=Item2)
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SoftwareEvent)
            -> MulticastSubject SoftwareEvent
        #0 -> AindBehaviorDynamicRoutingBonsaiDataSchema.MatchStimulus(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.QuadStimulus>)
        -> CreateObservable DrawQuad => #4
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Quad

            SubscribeSubject Draw2DStim => #3
            SubscribeSubject Quad
            -> MemberSelector(Selector=ExtentX)
            -> PropertyMapping(ExtentX) => #6
            SubscribeSubject Quad
            -> MemberSelector(Selector=ExtentY)
            -> PropertyMapping(ExtentY) => #9
            SubscribeSubject Quad
            -> MemberSelector(Selector=PositionX)
            -> PropertyMapping(LocationX) => #12
            SubscribeSubject Quad
            -> MemberSelector(Selector=PositionY)
            -> PropertyMapping(LocationY) => #15
            SubscribeSubject Quad
            -> MemberSelector(Selector=ColorR)
            -> PropertyMapping(ColorR) => #18
            SubscribeSubject Quad
            -> MemberSelector(Selector=ColorG)
            -> PropertyMapping(ColorG) => #21
            SubscribeSubject Quad
            -> MemberSelector(Selector=ColorB)
            -> PropertyMapping(ColorB) => #24
            SubscribeSubject Quad
            -> MemberSelector(Selector=ColorA)
            -> PropertyMapping(ColorA) => #27
            #3, #6, #9, #12, #15, #18, #21, #24, #27 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=1, ExtentY=1, LocationX=0, LocationY=0, Layer=0, Angle=0, ColorR=1, ColorG=0, ColorB=0, ColorA=1)
            -> FloatProperty(Value=0)
            -> WorkflowOutput
            SubscribeSubject Quad => #31
            #3, #31 -> WithLatestFrom
            -> Take(Count=1)
            -> MemberSelector(Selector=Item2)
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SoftwareEvent)
            -> MulticastSubject SoftwareEvent
        BehaviorSubject<System.Reactive.Unit> StopDrawing
        -> CreateObservable StopDrawing => #6
            WorkflowInput Source1

            SubscribeSubject Draw2DStim => #1
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=0
              ExtentY=0
              SpatialFrequency=0
              TemporalFrequency=0
              Phase=0
              Angle=0
              SquareWave=false
              Contrast=0
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=0
            -> WorkflowOutput
            StringProperty(Value=StopDrawing) => #4
            #1, #4 -> WithLatestFrom
            -> Take(Count=1)
            -> MemberSelector(Selector=Item2)
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SoftwareEvent)
            -> MulticastSubject SoftwareEvent
        #2, #4, #6 -> Merge
        -> Switch
        #0 -> AindBehaviorDynamicRoutingBonsaiDataSchema.MatchStimulus(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.BlankStimulus>)

    GroupWorkflow AudioStimuli
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSoundCard.PortName)
        -> PropertyMapping(PortName)
        -> GroupWorkflow HarpSoundCard
            BehaviorSubject<Bonsai.Harp.HarpMessage> HarpSoundCardCommands => #0
            ExternalizedMapping(PortName) => #1
            #0, #1 -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM8)
            -> PublishSubject HarpSoundCardEvents
            -> WorkflowOutput

            ExternalizedMapping(Name(DisplayName=TriggerHarpReadDumpSubjectName))
            -> SubscribeSubject TriggerHarpReadDump
            -> Bonsai.Harp.CreateMessage
              MessageType=Write
              Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
            -> MulticastSubject HarpSoundCardCommands
            -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateStopPayload(Stop=0))
            -> MulticastSubject HarpSoundCardCommands

        BehaviorSubject<AindBehaviorDynamicRoutingBonsaiDataSchema.Stimulus> AudioStimulus
        -> AindBehaviorDynamicRoutingBonsaiDataSchema.MatchStimulus(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.AudioStimulus>)
        -> Sink SoftwareEvent => #6
            WorkflowInput Source1
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SoftwareEvent)
            -> MulticastSubject SoftwareEvent
            -> WorkflowOutput
        -> InputMapping(AttenuationLeft(Selector=Attenuation))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=200)) => #8
        #6 -> InputMapping(AttenuationRight(Selector=Attenuation))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationRightPayload(AttenuationRight=0)) => #10
        #6 -> InputMapping(PlaySoundOrFrequency(Selector=WaveformIndex))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=11)) => #12
        #8, #10, #12 -> Merge
        -> MulticastSubject HarpSoundCardCommands

        BehaviorSubject<System.Reactive.Unit> StopAudio
        -> StringProperty(Value=StopAudio)
        -> Sink SoftwareEvent
            WorkflowInput Source1
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SoftwareEvent)
            -> MulticastSubject SoftwareEvent
            -> WorkflowOutput
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateStopPayload(Stop=0))
        -> MulticastSubject HarpSoundCardCommands

    GroupWorkflow LickDetection
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLicketySplit.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpLicketySplitDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.LickState)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
        -> Unit
        -> PublishSubject LickDetection

    GroupWorkflow Behavior
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpBehavior.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpBehaviorDevice.bonsai, PortName=COM4, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        PublishSubject<System.Int32> GiveReward
        -> InputMapping(PulseSupplyPort0(Selector=it))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort0Payload(PulseSupplyPort0=24))
        -> MulticastSubject HarpBehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
        -> MulticastSubject HarpBehaviorCommands

GroupWorkflow Logging
    SubscribeSubject SoftwareEvent
    -> ObserveOn(Scheduler=TaskPoolScheduler) => #1
    SubscribeSubject RendererSynchState
    -> ObserveOn(Scheduler=TaskPoolScheduler) => #3
    #1, #3 -> WithLatestFrom
    -> AllenNeuralDynamics.Core.FramestampSoftwareEvent => #5
    SubscribeSubject TimeBase
    -> ObserveOn(Scheduler=TaskPoolScheduler) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=Behavior)

    GroupWorkflow ConfigSchemaLogging
        SubscribeSubject SubjectSchema
        -> AindBehaviorDynamicRoutingBonsaiDataSchema.SerializeToJson(Formatting=None)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=session_output)

        SubscribeSubject TaskLogicSchema
        -> AindBehaviorDynamicRoutingBonsaiDataSchema.SerializeToJson(Formatting=None)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=tasklogic_output)

        SubscribeSubject RigSchema
        -> AindBehaviorDynamicRoutingBonsaiDataSchema.SerializeToJson(Formatting=None)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=rig_output)

        SubscribeSubject RawRigSchema
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=rig_input, Extension=json)

        SubscribeSubject RawSessionSchema
        -> IncludeWorkflow
          Path=AllenNeuralDynamics.Core:LogAllText.bonsai
          SubjectName=LoggingRootPath
          Modality=Behavior
          DeviceName=Config
          LogName=session_input
          Extension=json

        SubscribeSubject RawTaskLogicSchema
        -> IncludeWorkflow
          Path=AllenNeuralDynamics.Core:LogAllText.bonsai
          SubjectName=LoggingRootPath
          Modality=Behavior
          DeviceName=Config
          LogName=tasklogic_input
          Extension=json

Defer TrialLogic => #7
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=TaskBlocks)
    -> Merge
    -> CreateObservable DoBlock
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Block

        SubscribeSubject Block
        -> MemberSelector(Selector=TrialSets)
        -> Merge
        -> CreateObservable DoTrialSet
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialSet

            SubscribeSubject TrialSet
            -> MemberSelector(Selector=AvailableTrials.Count) => #4
            SubscribeSubject TrialSet
            -> MemberSelector(Selector=Repeats) => #6
            #4, #6 -> Zip
            -> Multiply
            -> Take(Count=1)
            -> AsyncSubject TotalTrials

            SubscribeSubject TotalTrials => #11
            SubscribeSubject TrialSet
            -> MemberSelector(Selector=Repeats)
            -> PropertyMapping(Count) => #14
            #11, #14 -> Range(Start=0, Count=2)
            -> SelectMany Shuffle
                WorkflowInput Source1

                SubscribeSubject TrialSet
                -> MemberSelector(Selector=AvailableTrials)
                -> ShuffleList
                -> Take(Count=1)
                -> WorkflowOutput
            -> Merge => #17
            SubscribeSubject TotalTrials
            -> PropertyMapping(Count) => #19
            #17, #19 -> Take(Count=8)
            -> ToList
            -> Take(Count=1)
            -> AsyncSubject Trials

            SubscribeSubject Trials
            -> IntProperty(Value=0)
            -> MulticastSubject InitiateTrial

            BehaviorSubject<System.Int32> InitiateTrial
            -> CreateObservable DoTrial
                WorkflowInput Source1 => #0
                SubscribeSubject Trials => #1
                #0, #1 -> Zip
                -> InputMapping(Selector=Item2, Value(Selector=Item1))
                -> Index(Operand=IntProperty(Value=2)) => #4
                #4, #0 -> Zip
                -> Take(Count=1)
                -> AsyncSubject Trial

                SubscribeSubject Trial
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=TrialStartEvent)
                -> MulticastSubject SoftwareEvent

                SubscribeSubject InterTrialIntervalDistribution
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1)
                -> AsyncSubject InterTrialInterval

                SubscribeSubject Trial => #15
                -> SelectMany Quiescence
                    WorkflowInput Source1

                    SubscribeSubject Trial
                    -> MemberSelector(Selector=Item1.PresentationParameters.StimulusStartTime)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime)
                    -> Timer(DueTime=PT1.5S)
                    -> BooleanProperty(Value=true) => #6
                    SubscribeSubject LickDetection
                    -> BooleanProperty(Value=false) => #8
                    #6, #8 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Condition EarlyLick => #17
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                SubscribeSubject Trial
                -> MemberSelector(Selector=Item2) => #19
                #17, #19 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #21
                #15 -> SelectMany ResponsePeriod => #22
                    WorkflowInput Source1 => #0
                    SubscribeSubject Trial
                    -> MemberSelector(Selector=Item1.PresentationParameters.ResponseWindowStartTime)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #4
                    #0, #4 -> Delay(DueTime=PT1.6S)
                    -> SelectMany ResponseWindow
                        SubscribeSubject LickDetection => #0
                        SubscribeSubject Trial
                        -> MemberSelector(Selector=Item1.PresentationParameters) => #2
                        #0, #2 -> Zip => #3
                        -> Condition Hit
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2.Rewarded)
                            -> WorkflowOutput
                        -> MemberSelector(Selector=Item2.RewardAmount)
                        -> MulticastSubject GiveReward
                        -> StringProperty(Value=Hit) => #7
                        #3 -> Condition FalseAlarm
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2.Rewarded)
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> StringProperty(Value=FalseAlarm) => #9
                        SubscribeSubject Trial
                        -> MemberSelector(Selector=Item1.PresentationParameters.ResponseWindowDuration)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime)
                        -> Timer(DueTime=PT0.9S) => #14
                        SubscribeSubject Trial
                        -> MemberSelector(Selector=Item1.PresentationParameters.Rewarded) => #16
                        #14, #16 -> Zip => #17
                        -> Condition CorrectRejection
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2)
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> StringProperty(Value=CorrectRejection) => #19
                        #17 -> Condition Miss
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2)
                            -> WorkflowOutput
                        -> StringProperty(Value=Miss) => #21
                        #7, #9, #19, #21 -> Merge
                        -> Take(Count=1)
                        -> AsyncSubject TrialResult

                        SubscribeSubject TrialResult => #25
                        SubscribeSubject Trial => #26
                        #25, #26 -> Zip => #27
                        -> Condition NonContingentReward => #28
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2.Item1.PresentationParameters.NonContingentReward)
                            -> WorkflowOutput
                        -> Condition Miss
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item1)
                            -> Equal(Operand=StringProperty(Value=Miss))
                            -> WorkflowOutput
                        -> Sink GiveReward => #30
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2.Item1.PresentationParameters.RewardAmount)
                            -> MulticastSubject GiveReward
                            -> WorkflowOutput
                        #28 -> Condition Hit => #31
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item1)
                            -> Equal(Operand=StringProperty(Value=Hit))
                            -> WorkflowOutput
                        #30, #31 -> Merge
                        -> MemberSelector(Selector=Item1) => #33
                        #27 -> Condition ContingentReward
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2.Item1.PresentationParameters.NonContingentReward)
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> MemberSelector(Selector=Item1) => #35
                        #33, #35 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Condition FalseAlarm => #23
                    WorkflowInput Source1
                    -> Equal(Operand=StringProperty(Value=FalseAlarm))
                    -> WorkflowOutput
                SubscribeSubject Trial => #24
                #23, #24 -> WithLatestFrom => #25
                -> MemberSelector(Selector=Item2.Item2) => #26
                SubscribeSubject Trial
                -> MemberSelector(Selector=Item1.PresentationParameters.TimeoutDuration)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #30
                #26, #30 -> Delay(DueTime=PT4.5S) => #31
                #22 -> Condition NonFalseAlarm => #32
                    WorkflowInput Source1
                    -> NotEqual(Operand=StringProperty(Value=FalseAlarm))
                    -> WorkflowOutput
                SubscribeSubject Trial
                -> MemberSelector(Selector=Item2)
                -> Add(Operand=IntProperty(Value=1)) => #35
                #32, #35 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #37
                #21, #31, #37 -> Merge
                -> Sink Reset
                    WorkflowInput Source1
                    -> Unit
                    -> MulticastSubject StopAudio
                    -> MulticastSubject StopDrawing
                    -> WorkflowOutput
                -> Take(Count=1) => #40
                SubscribeSubject InterTrialInterval
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #43
                #40, #43 -> Delay(DueTime=PT2.639S)
                -> WorkflowOutput
                #15 -> CreateObservable Stimulus => #46
                    WorkflowInput Source1 => #0
                    SubscribeSubject Trial
                    -> MemberSelector(Selector=Item1.PresentationParameters.StimulusStartTime)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #4
                    #0, #4 -> Delay(DueTime=PT1.5S)
                    -> MemberSelector(Selector=Item1.Stimulus)
                    -> MulticastSubject DrawStimulus
                    -> MulticastSubject AudioStimulus
                    -> Unit => #9
                    SubscribeSubject Trial
                    -> MemberSelector(Selector=Item1.PresentationParameters.StimulusDuration)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #13
                    #9, #13 -> Delay(DueTime=PT0.5S)
                    -> MulticastSubject StopDrawing
                    -> MulticastSubject StopAudio
                    -> WorkflowOutput
                #25 -> CreateObservable Timeout => #47
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject TrialInfo

                    SubscribeSubject TrialInfo
                    -> MemberSelector(Selector=Item2.Item1.PresentationParameters.TimeoutStimulus)
                    -> MulticastSubject DrawStimulus

                    SubscribeSubject Trial
                    -> MemberSelector(Selector=Item1.PresentationParameters.TimeoutDuration)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime)
                    -> Timer(DueTime=PT4.5S)
                    -> Unit
                    -> WorkflowOutput
                #46, #47 -> Merge
                -> Switch
            -> Merge
            -> BehaviorSubject TrialComplete

            SubscribeSubject TrialComplete => #31
            -> Condition ContinueTrials
                WorkflowInput Source1 => #0
                SubscribeSubject TotalTrials => #1
                #0, #1 -> WithLatestFrom
                -> LessThan
                -> WorkflowOutput
            -> MulticastSubject InitiateTrial
            #31 -> Condition FinishTrials => #34
                WorkflowInput Source1 => #0
                SubscribeSubject TotalTrials => #1
                #0, #1 -> WithLatestFrom
                -> LessThan
                -> BitwiseNot
                -> WorkflowOutput
            #31, #34 -> TakeUntil
            -> WorkflowOutput
        -> Concat
        -> Last
        -> WorkflowOutput
    -> Concat
    -> WorkflowOutput
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false)
-> Unit
-> PublishSubject TriggerHarpReadDump => #10
#7, #10 -> SubscribeWhen

Disable SubscribeSubject SoftwareEvent
-> Disable MemberSelector(Selector=Data)

Disable SubscribeSubject GiveReward
Disable SubscribeSubject TimeBase
